'CR1000X Series Datalogger
'The datalogger type listed on line 1 determines the default instruction set,
'compiler, and help files used for a program that uses the .DLD or .CRB program
'extension. These options can also be set using the Set Datalogger Type dialog box
'(CRBasic Editor|Tools|Set Datalogger Type).

'Date: 12/04/2024
'Program author: Ruben E. Ruiz.

'Declare Constants
'Example: Test basic control valve
'CONST PI = 3.141592654

'Declare Public Variables
'Example:
Public PTemp, Batt_volt
Public onIrrigation As Boolean

'Declare Private Variables
'Example:
'Dim Counter

'Define Data Tables
DataTable (Test,1,-1) 'Set table size to # of records, or -1 to autoallocate.
	DataInterval (0,15,Sec,10)
	Minimum (1,batt_volt,FP2,False,False)
	Sample (1,PTemp,FP2)
EndTable

'Define Subroutines
'Sub
	'EnterSub instructions here
'EndSub

'Main Program
BeginProg
  onIrrigation = False
	Scan (5,Sec,0,0)
		PanelTemp (PTemp,15000)
		Battery (Batt_volt)
		'Enter other measurement instructions
		'Call Output Tables
		'Example:
		CallTable Test
	
    'Control valve
		PortSet(C1,onIrrigation)
		'On/off Irrigation
    onIrrigation = NOT onIrrigation
    
	NextScan
EndProg

